WorkflowBuilder(Version=2.8.1)
GroupWorkflow Config
    GroupWorkflow SessionSettings
        Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Take(Count=1)
        -> AsyncSubject RngSeed

        ExternalizedMapping(Value(DisplayName=Path))
        -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
        -> Take(Count=1)
        -> AsyncSubject TextureBankPath

        Annotation(Text="A small value that is used to sum to the visual horizon to instantiate resources.")
        -> FloatProperty(Value=0)
        -> Take(Count=1)
        -> AsyncSubject SigmaZ

        ExternalizedMapping(Value(DisplayName=FarClipHorizon))
        -> FloatProperty(Value=1000)
        -> Take(Count=1)
        -> AsyncSubject FarClipHorizon

        Annotation(Text="The distance used to determine whether a segment should be disposed.") => #15
        ExternalizedMapping(Value(DisplayName=DisposingTreshold)) => #16
        #15, #16 -> FloatProperty(Value=20)
        -> Take(Count=1)
        -> AsyncSubject DisposingTreshold

    GroupWorkflow PatchStatistics
        CreateTransitionMatrix(TransitionMatrix="0,1;1,0", NormalizeRows=true)
        -> Take(Count=1)
        -> BehaviorSubject TransitionMatrix

        SubscribeSubject TransitionMatrix
        -> MemberSelector(Selector=Rows)
        -> PropertyMapping(Count)
        -> Range(Start=0, Count=2)
        -> InputMapping(StateIndex(Selector=it), OdorIdex(Selector=it))
        -> IncludeWorkflow(Path=Extensions\CreatePatchStatistics.bonsai, StateIndex=1, OdorIdex=1, OdorConcentration=100, RewardAmount=5)
        -> ToDictionary(KeySelector=StateIndex, ElementSelector=it)
        -> Take(Count=1)
        -> AsyncSubject PatchStatistics

        SubscribeSubject RngSeed => #12
        SubscribeSubject TransitionMatrix
        -> MemberSelector(Selector=Rows)
        -> Subtract(Operand=IntProperty(Value=1))
        -> PropertyMapping(Upper) => #16
        #12, #16 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Take(Count=1)
        -> BehaviorSubject ActivePatch

        SubscribeSubject ActivePatch
        -> CreateObservable UpdateState
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject PatchIndex

            SubscribeSubject PatchStatistics => #3
            SubscribeSubject PatchIndex
            -> PropertyMapping(Value) => #5
            #3, #5 -> Index(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> AsyncSubject ThisPatch

            SubscribeSubject ThisPatch
            -> MemberSelector(Selector=RewardSpecs)
            -> MemberSelector(Selector=RewardAmount)
            -> MulticastSubject RewardAvailable

            SubscribeSubject GiveReward
            -> Bonsai.Scripting.Expressions.ExpressionTransform ConsumedReward
              Expression: it.Item1 ? 1 : 0
            -> SelectMany --RewardsAvailable
                SubscribeSubject RewardAvailable => #0
                WorkflowInput Source1 => #1
                #0, #1 -> Zip
                -> Take(Count=1)
                -> Subtract
                -> MulticastSubject RewardAvailable
                -> WorkflowOutput

            SubscribeSubject RewardAvailable
            -> GreaterThan(Operand=FloatProperty(Value=0))
            -> MulticastSubject RewardDepleted
        -> Switch

        BehaviorSubject<System.Single> RewardAvailable
        BehaviorSubject<System.Boolean> RewardDepleted

        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject HasRefusedLastReward

    GroupWorkflow OperationalSettings
        ExternalizedMapping(Value(DisplayName=LickToReward))
        -> BooleanProperty(Value=true)
        -> BehaviorSubject LickToReward

        ExternalizedMapping(Value(DisplayName=TimeToCollectReward))
        -> TimeSpanProperty(Value=PT1H)
        -> BehaviorSubject TimeToCollectReward

GroupWorkflow ScreenConfiguration
    Bonsai.Shaders.CreateWindow
      Width=1000
      Height=1000
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=false
      Location=nil
      WindowBorder=Hidden
      WindowState=Maximized
      DisplayDevice=Third
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=ScaledTexturedModel
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=textureDiffuse, TextureSlot=Texture0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=BonVision:Shaders.TexturedModel.vert
          FragmentShader=Shaders\ScaledTexturedModel.frag
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\LoadAllScreensCalibration.bonsai)
    -> Take(Count=1)
    -> AsyncSubject ScreenCalibration

    Bonsai.Shaders.RenderFrame => #8
    SubscribeSubject FarClipHorizon
    -> PropertyMapping(FarClip) => #10
    #8, #10 -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0)) => #11
    -> MemberSelector(Selector=ViewMatrix)
    -> Bonsai.Shaders.RotateY(Order=Append, Angle=-3.14159274) => #13
    #13, #11 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as ViewMatrix,
        Item2.ProjectionMatrix as ProjectionMatrix,
        Item2.Light as Light)
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear) => #17
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Left)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #20
    #17, #20 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=60.0001403060998, Z=0), Translation(X=-20, Y=0, Z=-8))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.333333343, Height=1)
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Center)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #25
    #17, #25 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=0, Z=0), Translation(X=0, Y=0, Z=-12.7))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.333333343, Y=0, Width=0.333333343, Height=1)
    SubscribeSubject ScreenCalibration
    -> MemberSelector(Selector=Right)
    -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation), Translation(Selector=Translation)) => #30
    #17, #30 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=22, Height=22, Rotation(X=0, Y=-60.0001403060998, Z=0), Translation(X=20, Y=0, Z=-8))
    -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.6666667, Y=0, Width=0.333333, Height=1)
    -> PublishSubject PostDrawing

    GroupWorkflow ScreenBrightnessControl
        FloatProperty(Value=1)
        -> Take(Count=1)
        -> BehaviorSubject ScreenBrightness

        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #5
        SubscribeSubject ScreenBrightness
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 1.0 - it
        -> PropertyMapping(ColorA) => #8
        #5, #8 -> IncludeWorkflow(Path=BonVision:Primitives.DrawQuad.bonsai, ExtentX=2, ExtentY=2, LocationX=0, LocationY=0, Layer=100, Angle=0, ColorR=0, ColorG=0, ColorB=0, ColorA=0)

GroupWorkflow LoadTextureBank
    SubscribeSubject TextureBankPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=Textures, SearchPattern=*.jpg, SearchOption=TopDirectoryOnly)
    -> Merge
    -> CreateObservable LoadTexture
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TexturePath

        SubscribeSubject TexturePath
        -> Bonsai.IO.GetFileNameWithoutExtension => #4
        SubscribeSubject TexturePath
        -> PropertyMapping(FileName)
        -> Bonsai.Shaders.LoadImage => #7
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Textures\wall_4.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        #4, #7 -> Zip
        -> WorkflowOutput
    -> Merge
    -> ToDictionary(KeySelector=Item1, ElementSelector=Item2)
    -> AsyncSubject TextureBank

Annotation(Text="")
-> GroupWorkflow TaskControl
    GroupWorkflow PositionControl
        DoubleProperty(Value=0)
        -> Take(Count=1) => #1
        Bonsai.Shaders.Input.MouseWheel
        -> MemberSelector(Selector=EventArgs.DeltaPrecise) => #3
        Bonsai.Shaders.UpdateFrame
        -> FloatProperty(Value=0.5) => #5
        #3, #5 -> Merge
        -> Accumulate
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=1, RescaleType=Linear)
        -> Bonsai.Shaders.DelaySubscription(DueTime=PT0.1S) => #9
        #1, #9 -> Concat
        -> InputMapping(Z(Selector=it))
        -> Bonsai.Shaders.CreateVector3(X=0, Y=4, Z=380.5)
        -> BehaviorSubject CurrentPosition

        SubscribeSubject CurrentPosition => #14
        Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=-1)
        -> Take(Count=1) => #16
        #14, #16 -> Scan => #17
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: Accumulation.Z > Value.Z ? Accumulation : Value
            -> WorkflowOutput
        Annotation "Max(Z)"(Text="") => #18
        #17, #18 -> BehaviorSubject MaxPosition

        Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.05S)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Bonsai.Numerics.Sin
        -> Add(Operand=DoubleProperty(Value=1))
        -> LessThan(Operand=DoubleProperty(Value=0.2))
        -> DistinctUntilChanged => #25
        Annotation(Text="[Discussion](https://github.com/AllenNeuralDynamics/aind-vr-foraging/discussions/3)") => #26
        #25, #26 -> BehaviorSubject IsStopped

    GroupWorkflow OdorControl
        BehaviorSubject<System.Tuple(System.Boolean,System.Int32,System.Single)> OdorControl
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as OrdorState,
            Item2 as OdorIdentity,
            Item3 as OdorConcentration
            )
        -> WorkflowOutput

    GroupWorkflow RewardControl
        Annotation(Text="")
        -> BehaviorSubject<System.Tuple(System.Boolean,System.Single)> GiveReward
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as RewardEnabled,
            Item2 as RewardAmout
            )
        -> WorkflowOutput

        Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=100, PayloadType=U8, Value=0)) => #4
        -> DoubleProperty(Value=0) => #5
        #5, #4 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=nil, PayloadType=TimestampedU8))
        -> PublishSubject LickEvent

    GroupWorkflow FeedbackControl
        Unit
        -> Take(Count=1)
        -> BehaviorSubject ChoiceFeedback

Annotation(Text="")
-> GroupWorkflow TaskLogic => #6
    GroupWorkflow CorridorDrawing
        ExternalizedMapping(Value(DisplayName=CorridorLength))
        -> FloatProperty(Value=100)
        -> Take(Count=1)
        -> AsyncSubject VisCorridorLength

        GroupWorkflow Initialize => #4
            SubscribeSubject FarClipHorizon => #0
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Z) => #2
            #0, #2 -> Zip
            -> Subtract => #4
            SubscribeSubject VisCorridorLength
            -> PropertyMapping(Value) => #6
            #4, #6 -> Divide(Operand=FloatProperty(Value=100))
            -> Take(Count=1)
            -> InputMapping(Count(Selector=it)) => #9
            SubscribeSubject CurrentPosition
            -> MemberSelector(Selector=Z)
            -> Take(Count=1)
            -> PropertyMapping(Start) => #13
            #9, #13 -> Range(Start=0, Count=10)
            -> InputMapping(Value(Selector=it))
            -> DoubleProperty(Value=9)
            -> WorkflowOutput
        ExternalizedMapping(GraceHorizon(DisplayName=GraceHorizon))
        -> GroupWorkflow Update => #6
            SubscribeSubject CurrentPosition => #0
            SubscribeSubject MaxPosition => #1
            #0, #1 -> CombineLatest
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Z,Item2.Z")
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> MemberSelector(Selector=Item1.Z) => #4
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(Value) => #6
            #4, #6 -> Add(Operand=FloatProperty(Value=1000)) => #7
            ExternalizedMapping(Value(DisplayName=GraceHorizon)) => #8
            #7, #8 -> Add(Operand=FloatProperty(Value=10)) => #9
            SubscribeSubject VisCorridorLength
            -> PropertyMapping(Value) => #11
            #9, #11 -> Divide(Operand=FloatProperty(Value=100))
            -> InputMapping(TypeMapping=TypeMapping<System.Double>)
            -> Bonsai.Numerics.Floor
            -> WorkflowOutput
        #4, #6 -> Concat
        -> DistinctUntilChanged => #8
        SubscribeSubject VisCorridorLength
        -> PropertyMapping(Value) => #10
        #8, #10 -> Multiply(Operand=DoubleProperty(Value=100)) => #11
        #8, #11 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as Id,
            Item2 as Start
            )
        -> InputMapping(Start(Selector=Start), Id(Selector=Id)) => #14
        SubscribeSubject VisCorridorLength
        -> PropertyMapping(Length) => #16
        #14, #16 -> IncludeWorkflow
          Path=Extensions\CreateCorridorSpecs.bonsai
          Width=40
          Height=40
          Start=1300
          Length=100
          TextureName=random_walls_2
          TextureSizeX=40
          TextureSizeY=40
          Id=13
        -> ReplaySubject VisCorridorSpecs(BufferSize=nil)

        SubscribeSubject VisCorridorSpecs
        -> IncludeWorkflow(Path=Extensions\DrawSegment.bonsai)
        -> Merge
        -> WorkflowOutput

    GroupWorkflow PatchGeneration
        IntProperty(Value=0)
        -> IncludeWorkflow
          Path=Extensions\CreateSite.bonsai
          Start=618
          Length=10
          Id=1
          Brightness=1
          HasRewardLogic=false
          RewardAmount=1
          RewardProbability=1
          RewardDelay=PT0S
          StopDuration=PT0S
          HasOdor=false
          OdorIdentity=0
          OdorConcentration=0
          Label=nil
          TimeToCollectReward=PT0S
          LickToReward=false
        -> IgnoreElements
        -> BehaviorSubject SiteSpecs

        SubscribeSubject SiteSpecs
        -> IncludeWorkflow(Path=Extensions\InstantiateSite.bonsai)
        -> Merge

        SubscribeSubject SiteSpecs
        -> GroupWorkflow InstantiateSite
            WorkflowInput Source1
            -> CreateObservable InstantiateSite
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisSiteSpecs

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #4
                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector=Start) => #6
                SubscribeSubject ThisSiteSpecs
                -> MemberSelector(Selector="Start,Length")
                -> Add => #9
                #4, #6, #9 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: (Item1 >= Item2) && (Item1 <= Item3)
                -> BehaviorSubject IsInSite

                Defer SiteLogic => #13
                    GroupWorkflow RewardControl => #0
                        SubscribeSubject ThisSiteSpecs
                        -> MemberSelector(Selector=RewardControl)
                        -> Take(Count=1)
                        -> AsyncSubject ThisRewardControl

                        SubscribeSubject IsStopped
                        -> CreateObservable CheckStop
                            Bonsai.Shaders.UpdateFrame
                            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
                            -> Accumulate => #2
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=StopDuration.TotalSeconds) => #4
                            #2, #4 -> CombineLatest
                            -> GreaterThan
                            -> Condition
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> Take(Count=1) => #8
                            WorkflowInput Source1 => #9
                            #8, #9 -> WithLatestFrom
                            -> MemberSelector(Selector=Item2)
                            -> Condition CheckIsStopped
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> WorkflowOutput
                        -> Switch => #6
                        Annotation LockedResponse(Text="") => #7
                        #6, #7 -> Take(Count=1)
                        -> Sink LockedChoiceFeedback => #9
                            WorkflowInput Source1
                            -> Unit
                            -> MulticastSubject ChoiceFeedback
                            -> WorkflowOutput
                        SubscribeSubject ThisRewardControl
                        -> MemberSelector(Selector=RewardDelay)
                        -> PropertyMapping(DueTime) => #12
                        #9, #12 -> Bonsai.Shaders.Delay(DueTime=PT0S) => #13
                        -> Condition Operant
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=LickToRewardControl.LickToReward)
                            -> WorkflowOutput
                        -> SelectMany WaitForLick => #15
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=LickToRewardControl.TimeToCollectReward.TotalSeconds)
                            -> PropertyMapping(DueTime)
                            -> Bonsai.Shaders.Timer(DueTime=PT0S)
                            -> BooleanProperty(Value=false) => #4
                            SubscribeSubject IsStopped
                            -> DistinctUntilChanged
                            -> BitwiseNot
                            -> Condition
                                WorkflowInput Source1
                                -> WorkflowOutput
                            -> BooleanProperty(Value=false) => #9
                            SubscribeSubject LickEvent
                            -> BooleanProperty(Value=true) => #11
                            #4, #9, #11 -> Merge
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> Condition FailToCollect
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> BooleanProperty(Value=false) => #17
                        #15 -> Condition Success
                            WorkflowInput Source1
                            -> WorkflowOutput
                        -> Unit => #19
                        #13 -> Condition Pavlovian
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=LickToRewardControl.LickToReward)
                            -> BitwiseNot
                            -> WorkflowOutput
                        -> Unit => #21
                        #19, #21 -> Merge
                        -> Take(Count=1) => #23
                        Annotation TODO(Text="") => #24
                        #23, #24 -> SelectMany DetermineReward
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=RewardProbability) => #1
                            SubscribeSubject RngSeed
                            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                            -> Bonsai.Numerics.Distributions.Sample => #4
                            #1, #4 -> Zip
                            -> GreaterThan => #6
                            SubscribeSubject ThisRewardControl
                            -> MemberSelector(Selector=RewardAmount) => #8
                            #6, #8 -> Zip
                            -> Take(Count=1)
                            -> WorkflowOutput
                        -> MulticastSubject GiveReward
                        -> BooleanProperty(Value=true) => #27
                        #17, #27 -> Merge
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=RewardControl.HasRewardLogic)
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1) => #4
                    #0, #4 -> SubscribeWhen

                    GroupWorkflow OdorControl => #6
                        Annotation OdorControl(Text="")
                        -> SubscribeSubject IsInSite
                        -> DistinctUntilChanged
                        -> InputMapping(ValveState(Selector=it)) => #3
                        SubscribeSubject ThisSiteSpecs
                        -> PropertyMapping(OdorIdentity(Selector=OdorControl.OdorIdentity), Concentration(Selector=OdorControl.OdorConcentration)) => #5
                        #3, #5 -> IncludeWorkflow(Path=Extensions\GenerateOdorControl.bonsai, ValveState=false, OdorIdentity=0, Concentration=1)
                        -> MulticastSubject OdorControl
                        -> WorkflowOutput
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=OdorControl.HasOdor)
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1) => #10
                    #6, #10 -> SubscribeWhen

                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector=BrightnessControl.Brightness)
                    -> MulticastSubject ScreenBrightness
                SubscribeSubject IsInSite
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> IncludeWorkflow(Path=Extensions\DebugActiveSite.bonsai)
                -> Take(Count=1) => #17
                #13, #17 -> SubscribeWhen => #18
                GroupWorkflow DisposeSite => #19
                    SubscribeSubject CurrentPosition
                    -> MemberSelector(Selector=Z) => #1
                    SubscribeSubject DisposingTreshold => #2
                    SubscribeSubject ThisSiteSpecs
                    -> MemberSelector(Selector="Start,Length")
                    -> Add => #5
                    #2, #5 -> CombineLatest
                    -> Add => #7
                    #1, #7 -> CombineLatest
                    -> GreaterThan
                    -> Condition
                        WorkflowInput Source1
                        -> WorkflowOutput
                    -> Take(Count=1)
                    -> WorkflowOutput
                #18, #19 -> TakeUntil
                -> LastOrDefault => #21
                SubscribeSubject ThisSiteSpecs => #22
                #21, #22 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> WorkflowOutput

    GroupWorkflow StateMachine
        Bonsai.Shaders.Timer(DueTime=PT0S)
        -> Take(Count=1)
        -> IncludeWorkflow
          Path=Extensions\AddInterPatchSite.bonsai
          Minimum=30
          Maximum=100
          Average=50
          Brightness=0.5
          HasOdor=false
          OdorIdentity=0
          OdorConcentration=0
          Label=InterPatch
        -> SelectMany Patch
            WorkflowInput Source1
            -> Take(Count=1)
            -> BehaviorSubject EntrySite

            SubscribeSubject ChoiceFeedback
            -> BooleanProperty(Value=false)
            -> MulticastSubject HasRefusedLastReward

            SubscribeSubject EntrySite
            -> Take(Count=1)
            -> IncludeWorkflow
              Path=Extensions\AddGapSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=false
              RewardAmount=0
              RewardProbability=0
              RewardDelay=PT0S
              StopDuration=PT0S
              HasOdor=false
              OdorIdentity=0
              OdorConcentration=0
              Label=InitialGapSite
            -> BehaviorSubject FirstPatchSite

            SubscribeSubject FirstPatchSite
            -> Take(Count=1)
            -> Condition NotHasRefusedLast
                SubscribeSubject HasRefusedLastReward
                -> BitwiseNot
                -> WorkflowOutput
            -> SelectMany ResetHasRefusedLast => #13
                BooleanProperty(Value=true)
                -> MulticastSubject HasRefusedLastReward
                -> Take(Count=1) => #2
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> Take(Count=1)
                -> WorkflowOutput
            SubscribeSubject TimeToCollectReward
            -> PropertyMapping(TimeToCollectReward) => #15
            SubscribeSubject LickToReward
            -> PropertyMapping(LickToReward) => #17
            #13, #15, #17 -> IncludeWorkflow
              Path=Extensions\AddRewardSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=true
              RewardProbability=1
              RewardDelay=PT0S
              StopDuration=PT0.5S
              HasOdor=true
              OdorConcentration=1
              Label=RewardSite
              TimeToCollectReward=PT0S
              LickToReward=false
            -> IncludeWorkflow
              Path=Extensions\AddGapSite.bonsai
              Minimum=20
              Maximum=50
              Average=30
              Brightness=1
              HasRewardLogic=false
              RewardAmount=0
              RewardProbability=0
              RewardDelay=PT0S
              StopDuration=PT0S
              HasOdor=false
              OdorIdentity=0
              OdorConcentration=0
              Label=GapSite
            -> SelectMany WaitForSiteOutcome
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject PreviousSite

                SubscribeSubject CurrentPosition
                -> MemberSelector(Selector=Z) => #4
                SubscribeSubject PreviousSite
                -> MemberSelector(Selector="Start,Length")
                -> Add => #7
                #4, #7 -> CombineLatest
                -> GreaterThan
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject PreviousSite => #12
                #11, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> MulticastSubject FirstPatchSite
            -> Take(Count=1)
            -> Repeat
            -> Condition HasExited
                SubscribeSubject HasRefusedLastReward
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany UpdateState
            SubscribeSubject TransitionMatrix => #0
            SubscribeSubject ActivePatch
            -> PropertyMapping(StartRow) => #2
            SubscribeSubject ActivePatch
            -> Add(Operand=IntProperty(Value=1))
            -> PropertyMapping(EndRow) => #5
            #0, #2, #5 -> Bonsai.Dsp.Submatrix(StartRow=0, EndRow=1, StartCol=0, EndCol=nil)
            -> Take(Count=1)
            -> AsyncSubject OutgoingStates

            SubscribeSubject RngSeed
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> AsyncSubject ThisRandom

            SubscribeSubject OutgoingStates
            -> Bonsai.Dsp.ConvertToArray(Depth=F32)
            -> Merge
            -> Accumulate
            -> ElementIndex => #18
            SubscribeSubject ThisRandom => #19
            #18, #19 -> WithLatestFrom
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector="Item1.Value,Item2")
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> FirstOrDefault => #22
            SubscribeSubject OutgoingStates
            -> MemberSelector(Selector=Cols) => #24
            #22, #24 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 == null ? (it.Item2 - 1) : (it.Item1.Item1.Index)
            -> MulticastSubject ActivePatch
        -> Repeat
Annotation(Text="Wait for the textures to load in GPU")
-> SubscribeSubject TextureBank => #8
#6, #8 -> SubscribeWhen

GroupWorkflow Debug
    GroupWorkflow RenderStateQuad
        SubscribeSubject PostDrawing
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #2
        SubscribeSubject ActiveSiteLabel
        -> Equal(Operand=StringProperty(Value=InterPatch))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel => #6
        -> Equal(Operand=StringProperty(Value=GapSite)) => #7
        #6 -> Equal(Operand=StringProperty(Value=InitialGapSite)) => #8
        #7, #8 -> Zip
        -> BitwiseOr
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #11
          Expression: it ? 255 : 0
        SubscribeSubject ActiveSiteLabel
        -> Equal(Operand=StringProperty(Value=RewardSite))
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #14
          Expression: it ? 255 : 0
        #5, #11, #14 -> Zip
        -> PropertyMapping(ColorR(Selector=Item1), ColorG(Selector=Item2), ColorB(Selector=Item3)) => #16
        #2, #16 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=0.9
          LocationY=0.9
          Layer=100
          Angle=0
          ColorR=0
          ColorG=0
          ColorB=255
          ColorA=1
        -> WorkflowOutput

    Annotation TODO
      Text: This should be replaced by a hook to the first citzen class that it is used to instantiate corridors in the future. Unfortunately, DyncamicClasses cannot be broadcasted in a consistent and flexible way.
    -> BehaviorSubject<System.String> ActiveSiteLabel
